PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Enable Escape = False
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 960]
  expName = Color_Reaction_Time
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    TextComponent fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter
      text = +
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    ImageComponent stimulus
      image [set every repeat] = $stimImage
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
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    KeyboardComponent response
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent timing
      Code Type = Auto->JS
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      Begin Routine:
        import random
        jitter = random.uniform(0.5, 1.5)
Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trials.csv
    loopType = random
    nReps = 20
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    conditions:
      [OrderedDict([('colorType', 'red'), ('stimImage', 'red_circle.png')]),
      OrderedDict([('colorType', 'green'), ('stimImage', 'green_circle.png')]),
      OrderedDict([('colorType', 'black'), ('stimImage', 'black_circle.png')]),
      OrderedDict([('colorType', 'red'), ('stimImage', 'red_circle.png')]),
      OrderedDict([('colorType', 'green'), ('stimImage', 'green_circle.png')]),
      OrderedDict([('colorType', 'black'), ('stimImage', 'black_circle.png')]),
      OrderedDict([('colorType', 'red'), ('stimImage', 'red_circle.png')]),
      OrderedDict([('colorType', 'green'), ('stimImage', 'green_circle.png')]),
      OrderedDict([('colorType', 'black'), ('stimImage', 'black_circle.png')]),
      OrderedDict([('colorType', 'red'), ('stimImage', 'red_circle.png')]),
      OrderedDict([('colorType', 'green'), ('stimImage', 'green_circle.png')]),
      OrderedDict([('colorType', 'black'), ('stimImage', 'black_circle.png')]),
      OrderedDict([('colorType', 'red'), ('stimImage', 'red_circle.png')]),
      OrderedDict([('colorType', 'green'), ('stimImage', 'green_circle.png')]),
      OrderedDict([('colorType', 'black'), ('stimImage', 'black_circle.png')]),
      OrderedDict([('colorType', 'red'), ('stimImage', 'red_circle.png')]),
      OrderedDict([('colorType', 'green'), ('stimImage', 'green_circle.png')]),
      OrderedDict([('colorType', 'black'), ('stimImage', 'black_circle.png')]),
      OrderedDict([('colorType', 'red'), ('stimImage', 'red_circle.png')]),
      OrderedDict([('colorType', 'green'), ('stimImage', 'green_circle.png')])]
    Routine trial
  LoopTerminator trials
