PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 800]
  expName = delay_discounting_experiment
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $"GDP " + str(reward_today) + " today" + " or " + " GDP " + str(future_reward) + " after " + str(delay) + " days" 
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    KeyboardComponent key_resp
      allowedKeys = 't','l'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions_file.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'reward_today': 11, 'future_reward': 30, 'delay': 7},
      {'reward_today': 15, 'future_reward': 35, 'delay': 13},
      {'reward_today': 27, 'future_reward': 50, 'delay': 21},
      {'reward_today': 40, 'future_reward': 55, 'delay': 62},
      {'reward_today': 49, 'future_reward': 60, 'delay': 89},
      {'reward_today': 67, 'future_reward': 75, 'delay': 119},
      {'reward_today': 78, 'future_reward': 80, 'delay': 162},
      {'reward_today': 405, 'future_reward': 1075, 'delay': 171},
      {'reward_today': 55, 'future_reward': 76, 'delay': 10},
      {'reward_today': 5, 'future_reward': 6, 'delay': 7},
      {'reward_today': 95, 'future_reward': 145, 'delay': 14},
      {'reward_today': 155, 'future_reward': 271, 'delay': 23},
      {'reward_today': 370, 'future_reward': 935, 'delay': 129},
      {'reward_today': 170, 'future_reward': 306, 'delay': 26},
      {'reward_today': 455, 'future_reward': 1291, 'delay': 255},
      {'reward_today': 25, 'future_reward': 32, 'delay': 8},
      {'reward_today': 385, 'future_reward': 994, 'delay': 146},
      {'reward_today': 390, 'future_reward': 1014, 'delay': 152},
      {'reward_today': 65, 'future_reward': 92, 'delay': 11},
      {'reward_today': 160, 'future_reward': 282, 'delay': 24},
      {'reward_today': 280, 'future_reward': 616, 'delay': 63},
      {'reward_today': 445, 'future_reward': 1246, 'delay': 235},
      {'reward_today': 135, 'future_reward': 226, 'delay': 20},
      {'reward_today': 215, 'future_reward': 422, 'delay': 37},
      {'reward_today': 350, 'future_reward': 859, 'delay': 110},
      {'reward_today': 80, 'future_reward': 118, 'delay': 13},
      {'reward_today': 205, 'future_reward': 395, 'delay': 35}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
    Routine trial
  LoopTerminator trials
